CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:20
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "Red")
    Name to assign these images:Red
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Blue")
    Name to assign these images:Dapi
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:Dapi
    Name the primary objects to be identified:Nucleus
    Typical diameter of objects, in pixel units (Min,Max):30,200
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
MeasureObjectSizeShape:[module_num:6|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
    Select object sets to measure:Nucleus
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

FilterObjects:[module_num:7|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
    Select the objects to filter:Nucleus
    Name the output objects:Nucleus_filtered
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_FormFactor
    Filter using a minimum measurement value?:Yes
    Minimum value:0.6
    Filter using a maximum measurement value?:Yes
    Maximum value:1.0
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
DisplayDataOnImage:[module_num:8|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
    Display object or image measurements?:Object
    Select the input objects:Nucleus
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:Dapi
    Text color:red
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:Agency FB
    Use scientific notation?:No
    Font weight:normal

EnhanceOrSuppressFeatures:[module_num:9|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
    Select the input image:Red
    Name the output image:EnhanceOrSuppressFeatures
    Select the operation:Enhance
    Feature size:9
    Feature type:Speckles
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    Speed and accuracy:Slow
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
IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:EnhanceOrSuppressFeatures
    Name the primary objects to be identified:H2AX
    Typical diameter of objects, in pixel units (Min,Max):2,13
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Size of adaptive window:50
    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
    Thresholding method:Robust Background

MaskObjects:[module_num:11|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
    Select objects to be masked:H2AX
    Name the masked objects:Masked_H2AX
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Nucleus_filtered
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

RelateObjects:[module_num:12|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
    Parent objects:Nucleus_filtered
    Child objects:Masked_H2AX
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:H2AX_in_nucleus
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
MeasureObjectIntensity:[module_num:13|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
    Select images to measure:Red
    Select objects to measure:H2AX_in_nucleus

MeasureObjectSizeShape:[module_num:14|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
    Select object sets to measure:H2AX_in_nucleus
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureObjectSizeShape:[module_num:15|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
    Select object sets to measure:Nucleus_filtered
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

OverlayOutlines:[module_num:16|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Red
    Name the output image:Overlaued_H2AX
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:Red
    Select objects to display:H2AX_in_nucleus

OverlayOutlines:[module_num:17|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Dapi
    Name the output image:Overlaued_Nuclei
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:blue
    Select objects to display:Nucleus_filtered

ExportToSpreadsheet:[module_num:18|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:H2AX_in_nucleus|AreaShape_Zernike_6_4,H2AX_in_nucleus|AreaShape_Zernike_6_6,H2AX_in_nucleus|AreaShape_Zernike_6_0,H2AX_in_nucleus|AreaShape_Zernike_6_2,H2AX_in_nucleus|AreaShape_Zernike_9_5,H2AX_in_nucleus|AreaShape_Zernike_9_7,H2AX_in_nucleus|AreaShape_Zernike_9_3,H2AX_in_nucleus|AreaShape_Zernike_9_9,H2AX_in_nucleus|AreaShape_Zernike_9_1,H2AX_in_nucleus|AreaShape_Zernike_7_5,H2AX_in_nucleus|AreaShape_Zernike_7_1,H2AX_in_nucleus|AreaShape_Zernike_7_7,H2AX_in_nucleus|AreaShape_Zernike_7_3,H2AX_in_nucleus|AreaShape_Zernike_8_4,H2AX_in_nucleus|AreaShape_Zernike_8_2,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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
SaveImages:[module_num:19|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
    Select the type of image to save:Image
    Select the image to save:Overlaued_H2AX
    Select method for constructing file names:From image filename
    Select image name for file prefix:Dapi
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:Foci_
    Saved file format:png
    Output file location:Default Input Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:20|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
    Select the type of image to save:Image
    Select the image to save:Overlaued_Nuclei
    Select method for constructing file names:From image filename
    Select image name for file prefix:Dapi
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:Nuclei_
    Saved file format:png
    Output file location:Default Input Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
